CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^cl(?P<Cell>.*)_exp(?P<time>.*)_h(?P<hour>.*)_b(?P<batch>.*)_ic(?P<label>.*)_c(?P<channel>.*).(tif)|(png)|(jpg)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DD")
    Name to assign these images:DD
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DA")
    Name to assign these images:DA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "AA")
    Name to assign these images:AA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "BF")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:hour
    Metadata category:label

ExportToSpreadsheet:[module_num:5|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notes:['导出对应的文件metadata数据']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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Metadata_batch,Image|Metadata_hour,Image|Metadata_label,Image|Metadata_time,Image|FileName_BF,Image|FileName_DA,Image|FileName_DD,Image|FileName_AA
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:20240616_FRET_BF_Image_
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:DATA.csv
    Use the object name for the file name?:No

GaussianFilter:[module_num:6|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notes:['高斯滤波器，高斯滤波是一种线性平滑滤波，适用于消除高斯噪声，广泛应用于图像处理的减噪过程。将噪声减弱。']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
    Select the input image:DD
    Name the output image:DDGaussianFilter
    Sigma:3

ReduceNoise:[module_num:7|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notes:['降低噪声。该模块执行非局部的降噪方法。这将运行一个5x5像素的补丁，最大距离为2像素，以搜索用于使用0.2的截止点去噪的补丁。']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
    Select the input image:DDGaussianFilter
    Name the output image:DDReduceNoise
    Size:5
    Distance:2
    Cut-off distance:0.2

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:DDReduceNoise
    Name the primary objects to be identified:BFSingle
    Typical diameter of objects, in pixel units (Min,Max):100,600
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:15
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0,1.0
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    Log transform before thresholding?:Yes
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
MeasureGranularity:[module_num:9|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
    Select images to measure:BF
    Measure within objects?:Yes
    Select objects to measure:BFSingle
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensityDistribution:[module_num:10|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
    Select images to measure:BF
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:BFSingle
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:BFSingle
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:12|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
    Select images to measure:BF
    Select objects to measure:BFSingle
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

OverlayOutlines:[module_num:13|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enabled:False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
    Display outlines on a blank image?:Yes
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    Name the output image:CellOverlay
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:DDSingle

SaveImages:[module_num:14|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:CellOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DD
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:BFSingle|RadialDistribution_MeanFrac_BF_1of4,BFSingle|RadialDistribution_MeanFrac_BF_3of4,BFSingle|RadialDistribution_MeanFrac_BF_2of4,BFSingle|RadialDistribution_MeanFrac_BF_4of4,BFSingle|RadialDistribution_RadialCV_BF_1of4,BFSingle|RadialDistribution_RadialCV_BF_2of4,BFSingle|RadialDistribution_RadialCV_BF_4of4,BFSingle|RadialDistribution_RadialCV_BF_3of4,BFSingle|RadialDistribution_FracAtD_BF_1of4,BFSingle|RadialDistribution_FracAtD_BF_3of4,BFSingle|RadialDistribution_FracAtD_BF_4of4,BFSingle|RadialDistribution_FracAtD_BF_2of4,BFSingle|Texture_Entropy_BF_3_03_256,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:20240616_FRET_BF_Image_
    Overwrite existing files without warning?:No
    Data to export:BFSingle
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
