CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^cl(?P<Cell>.*)_exp(?P<time>.*)_h(?P<hour>.*)_b(?P<batch>.*)_ic(?P<label>.*)_c(?P<channel>.*).(tif)|(png)|(jpg)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:6
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DD")
    Name to assign these images:DD
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DA")
    Name to assign these images:DA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "AA")
    Name to assign these images:AA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "MB")
    Name to assign these images:MB
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "BF")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ED")
    Name to assign these images:ED
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ExportToSpreadsheet:[module_num:5|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notes:['导出对应的文件metadata数据']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Metadata_label,Image|Metadata_batch,Image|Metadata_time,Image|Metadata_hour,Image|FileName_MB,Image|FileName_DD,Image|FileName_BF,Image|FileName_ED,Image|FileName_DA,Image|FileName_AA
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:2024515_6h_FRET_Image_
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:DATA.csv
    Use the object name for the file name?:No

MaskImage:[module_num:6|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notes:['利用DD、DA、AA三者最大化区域进行对于DD图像的掩码，以最大化细胞信息，屏蔽背景混杂信息']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
    Select the input image:DD
    Name the output image:DDMask
    Use objects or an image as a mask?:Image
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    Select image for mask:MB
    Invert the mask?:No

GaussianFilter:[module_num:7|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notes:['高斯滤波器，高斯滤波是一种线性平滑滤波，适用于消除高斯噪声，广泛应用于图像处理的减噪过程。将噪声减弱。']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
    Select the input image:DD
    Name the output image:DDGaussianFilter
    Sigma:3

ReduceNoise:[module_num:8|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notes:['降低噪声。该模块执行非局部的降噪方法。这将运行一个5x5像素的补丁，最大距离为2像素，以搜索用于使用0.2的截止点去噪的补丁。']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
    Select the input image:DDGaussianFilter
    Name the output image:DDReduceNoise
    Size:5
    Distance:2
    Cut-off distance:0.2

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:DDReduceNoise
    Name the primary objects to be identified:DDSingle
    Typical diameter of objects, in pixel units (Min,Max):100,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.01
    Upper outlier fraction:0.01
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
MeasureColocalization:[module_num:10|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
    Select images to measure:AA, DA, DD
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:DDSingle
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:11|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
    Select images to measure:AA, DA, DD
    Measure within objects?:Yes
    Select objects to measure:DDSingle
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:12|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
    Select images to measure:AA, DA, DD, ED
    Select objects to measure:DDSingle

MeasureObjectNeighbors:[module_num:13|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
    Select objects to measure:DDSingle
    Select neighboring objects to measure:DDSingle
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:14|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
    Select images to measure:AA, DA, DD
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:DDSingle
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:15|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
    Select object sets to measure:DDSingle
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:16|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
    Select images to measure:AA, DA, DD
    Select objects to measure:DDSingle
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:Yes
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    Name the output image:CellOverlay
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:DDSingle

SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:CellOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DD
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Metadata_label,Image|Metadata_batch,Image|Metadata_time,Image|Metadata_hour,DDSingle|Texture_Correlation_AA_3_00_256,DDSingle|Texture_Correlation_AA_3_03_256,DDSingle|Texture_Correlation_AA_3_02_256,DDSingle|Texture_Correlation_AA_3_01_256,DDSingle|Texture_Correlation_DD_3_03_256,DDSingle|Texture_Correlation_DD_3_02_256,DDSingle|Texture_Correlation_DD_3_00_256,DDSingle|Texture_Correlation_DD_3_01_256,DDSingle|Texture_Correlation_DA_3_02_256,DDSingle|Texture_Correlation_DA_3_01_256,DDSingle|Texture_Correlation_DA_3_03_256,DDSingle|Texture_Correlation_DA_3_00_256,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:2024515_6h_FRET_
    Overwrite existing files without warning?:Yes
    Data to export:DDSingle
    Combine these object measurements with those of the previous object?:No
    File name:DATA.csv
    Use the object name for the file name?:No
