CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['元数据模块允许您选择性地提取描述图像的信息（即元数据），这些信息将与测量一起存储。此信息可以包含在文件名和/或位置中，也可以包含在外部文件中。这里我们使用文件夹名称作为数据的分类依据']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*\\data\\(?P<batch>\d*)\\(?P<time>\d*)_(?P<control>\d*)\\(?P<well>\d*)
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['NamesAndTypes模块允许您为每个图像分配一个有意义的名称，其他模块将通过该名称引用它。在这里我们定义五个通道的数据，分别是DD、DA、AA、模板通道以及明场通道。']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "image_")
    Name to assign these images:Bright
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "AA")
    Name to assign these images:AA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DA")
    Name to assign these images:DA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DD")
    Name to assign these images:DD
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "moban")
    Name to assign these images:MB
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:control

IdentifyPrimaryObjects:[module_num:5|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notes:['首先检测 DD的荧光强度，利用DD荧光强度划分明场图像']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
    Select the input image:DD
    Name the primary objects to be identified:DDSingleCell
    Typical diameter of objects, in pixel units (Min,Max):50,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:2
    Lower and upper bounds on threshold:0,1.0
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    Lower outlier fraction:0.01
    Upper outlier fraction:0.01
    Averaging method:Mode
    Variance method:Standard deviation
    # of deviations:0
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
EnhanceOrSuppressFeatures:[module_num:6|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notes:['明场图像首先进行处理，提取有用的细节信息']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
    Select the input image:Bright
    Name the output image:EnhanceBright
    Select the operation:Enhance
    Feature size:10
    Feature type:Texture
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    Smoothing scale:2.0
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
MaskImage:[module_num:7|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notes:['将模板图像套用在加强的明场图像上，实现在该区域内的分割']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
    Select the input image:EnhanceBright
    Name the output image:MaskBright
    Use objects or an image as a mask?:Image
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    Select image for mask:MB
    Invert the mask?:No

IdentifySecondaryObjects:[module_num:8|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notes:['利用DD的单细胞分割图像，进行点扩散分割加强的明场图像']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
    Select the input objects:DDSingleCell
    Name the objects to be identified:BrightSingleCell
    Select the method to identify the secondary objects:Propagation
    Select the input image:MaskBright
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:7
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
IdentifySecondaryObjects:[module_num:9|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notes:['提取FRET两个蛋白分子作用的图像信息数据，进行细胞分割']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
    Select the input objects:DDSingleCell
    Name the objects to be identified:DASingleCell
    Select the method to identify the secondary objects:Propagation
    Select the input image:DA
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:10|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notes:['查看强度之间的相关性，利用分割出的明场单细胞图像与原始图像进行比对']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
    Select images to measure:Bright
    Select objects to measure:BrightSingleCell

MeasureColocalization:[module_num:11|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notes:['查看FRET图像之间的三个通道强度之间的相关性。']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
    Select images to measure:AA, DA, DD
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:DDSingleCell
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureObjectSizeShape:[module_num:12|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notes:['输出明场细胞的中细胞的大小，和FRET作用效果的细胞区域大小']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
    Select object sets to measure:BrightSingleCell, DASingleCell, DDSingleCell
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensityDistribution:[module_num:13|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notes:['查看荧光强度的分布情况，bin设置为4标识利用4个区间段区分荧光强度分布情况']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
    Select images to measure:AA, DA, DD
    Hidden:2
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:DDSingleCell
    Object to use as center?:These objects
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    Select objects to measure:BrightSingleCell
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureTexture:[module_num:14|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notes:['查看纹理特征，利用明场图像的单细胞内的区域变化进行查看']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
    Select images to measure:Bright
    Select objects to measure:BrightSingleCell
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:BrightSingleCell|Location_MaxIntensity_X_Bright,BrightSingleCell|Location_MaxIntensity_Y_Bright,BrightSingleCell|Location_MaxIntensity_Z_Bright,BrightSingleCell|Location_Center_Y,BrightSingleCell|Location_Center_X,BrightSingleCell|Location_Center_Z,BrightSingleCell|Location_CenterMassIntensity_X_Bright,BrightSingleCell|Location_CenterMassIntensity_Z_Bright,BrightSingleCell|Location_CenterMassIntensity_Y_Bright,BrightSingleCell|RadialDistribution_FracAtD_DA_3of4,BrightSingleCell|RadialDistribution_FracAtD_DA_2of4,BrightSingleCell|RadialDistribution_FracAtD_DA_4of4,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:PC_
    Overwrite existing files without warning?:No
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