CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<Site>\d{1,2})$
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<ChannelNumber>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Hoechst")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DNA
    Name the output image:DNARescaleIntensity
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum for each image
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    Intensity range for the output image:0,1
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:DNARescaleIntensity
    Name the primary objects to be identified:Nucleus
    Typical diameter of objects, in pixel units (Min,Max):100,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:2
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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    Size of adaptive window:200
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    Thresholding method:Otsu

GrayToColor:[module_num:7|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
    Select a color scheme:RGB
    Rescale intensity:Yes
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    Select the image to be colored blue:DNARescaleIntensity
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
MeasureObjectIntensity:[module_num:8|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
    Select images to measure:DNA
    Select objects to measure:Nucleus

MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:Nucleus
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:10|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
    Select images to measure:DNA
    Select objects to measure:Nucleus
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:A13318552_24h
    Overwrite existing files without warning?:No
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