CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^cl(?P<Cell>.*)_exp(?P<time>.*)_h(?P<hour>.*)_b(?P<batch>.*)_ic(?P<label>.*)_c(?P<channel>.*).(tif)|(png)|(jpg)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DD")
    Name to assign these images:DD
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DA")
    Name to assign these images:DA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "AA")
    Name to assign these images:AA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "BF")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:label

MeasureImageQuality:[module_num:5|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:4
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:2
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
FlagImage:[module_num:6|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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMinimal_DD
    Flag images based on low values?:Yes
    Minimum value:0.0
    Flag images based on high values?:Yes
    Maximum value:1.0
    Classifier file location:Default Input Folder|
    Classifier file name:rules.txt
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    Ignore flag skips on last cycle?:No
